begin model
begin parameters
    egf_tot       1.2e6    # molecule counts
    egfr_tot      1.8e5   
    Grb2_tot      1.0e5   
    Shc_tot       2.7e5 
    Sos_tot       1.3e4 
    Grb2_Sos_tot  4.9e4  

    kp1      1.667e-06 # ligand-monomer binding (scaled), units: /molecule/s
    km1           0.06 # ligand-monomer dissociation, units: /s

    kp2      5.556e-06 # aggregation of bound monomers (scaled)
    km2            0.1 # dissociation of bound monomers

    kp3            0.5 # dimer transphosphorylation   
    km3          4.505 # dimer dephosphorylation        

    kp14             3 # Shc transphosphorylation  
    km14          0.03 # Shc dephosphorylation      

    km16         0.005 # Shc cytosolic dephosphorylation     

    kp9      8.333e-07 # binding of Grb2 to receptor (scaled)
    km9           0.05 # dissociation of Grb2 from receptor

    kp10     5.556e-06 # binding of Sos to receptor (scaled)
    km10          0.06 # dissociation of Sos from receptor

    kp11      1.25e-06 # binding of Grb2-Sos to receptor (scaled)
    km11          0.03 # diss. of Grb2-Sos from receptor

    kp13       2.5e-05 # binding of Shc to receptor (scaled)
    km13           0.6 # diss. of Shc from receptor

    kp15       2.5e-07 # binding of ShcP to receptor (scaled)
    km15           0.3 # diss. of ShcP from receptor

    kp17     1.667e-06 # binding of Grb2 to RP-ShcP (scaled)
    km17           0.1 # diss. of Grb2 from RP-ShcP  

    kp18       2.5e-07 # binding of ShcP-Grb2 to receptor (scaled)
    km18           0.3 # diss. of ShcP-Grb2 from receptor

    kp19     5.556e-06 # binding of Sos to RP-ShcP-Grb2 (scaled)
    km19        0.0214 # diss. of Sos from RP-ShcP-Grb2 

    kp20     6.667e-08 # binding of ShcP-Grb2-Sos to receptor (scaled)
    km20          0.12 # diss. of ShcP-Grb2-Sos from receptor

    kp24         5e-06 # binding of Grb2-Sos to RP-ShcP (scaled)
    km24        0.0429 # diss. of Grb2-Sos from RP-ShcP

    kp21     1.667e-06 # binding of ShcP to Grb2 in cytosol (scaled)
    km21          0.01 # diss. of Grb2 and SchP in cytosol

    kp23     1.167e-05 # binding of ShcP to Grb2-Sos in cytosol (scaled)
    km23           0.1 # diss. of Grb2-Sos and SchP in cytosol

    kp12     5.556e-08 # binding of Grb2 to Sos in cytosol (scaled)
    km12        0.0015 # diss. of Grb2 and Sos in cytosol

    kp22     1.667e-05 # binding of ShcP-Grb2 to Sos in cytosol (scaled)
    km22         0.064 # diss. of ShcP-Grb2 and Sos in cytosol

    # check detailed balanced
    loop1 = (kp9/km9)*(kp10/km10)/((kp11/km11)*(kp12/km12))
    loop2 = (kp15/km15)*(kp17/km17)/((kp21/km21)*(kp18/km18))
    loop3 = (kp18/km18)*(kp19/km19)/((kp22/km22)*(kp20/km20))
    loop4 = (kp12/km12)*(kp23/km23)/((kp22/km22)*(kp21/km21))
    loop5 = (kp15/km15)*(kp24/km24)/((kp20/km20)*(kp23/km23))
end parameters

begin molecule types
    EGF(r)
    EGFR(l,r,Y1068~u~p,Y1148~u~p)
    Shc(PTB,Y317~u~p)
    Grb2(SH2,SH3)
    Sos(dom)
    Src()
    PTP()
    Source()
    Sink()
    pro_EGF()
end molecule types

begin seed species
    EGF(r)                        egf_tot
    Grb2(SH2,SH3)                 Grb2_tot
    Shc(PTB,Y317~u)               Shc_tot
    Sos(dom)                      Sos_tot
    EGFR(l,r,Y1068~u,Y1148~u)     egfr_tot
    EGFR(l,r,Y1068~P!1,Y1148~P).Grb2(SH2!1,SH3)     egfr_tot
    Grb2(SH2,SH3!1).Sos(dom!1)    Grb2_Sos_tot
    Src() qq
end seed species

begin reaction rules
    # degradation
    EGFR() -> 0 km1
    0 -> EGF() kp1
    pro_EGF() -> EGF(r) kp1
    EGF().EGFR() -> EGFR() kp1
    EGF(r!1).EGFR(l!1,r) -> EGFR(l,r) kp1, km1

    # Ligand-receptor binding      
    EGFR(l,r)   + EGF(r) <-> EGFR(l!1,r).EGF(r!1)  kp1, km1   #ligand-monomer

    # Note changed multiplicity
    # Receptor-aggregation 
    EGFR(l!+,r) + EGFR(l!+,r) <-> EGFR(l!+,r!3).EGFR(l!+,r!3)  kp2,km2

    # Transphosphorylation of egfr by RTK
    EGFR(r!+,Y1068~u).Src() -> EGFR(r!+,Y1068~p).Src()  kp3
    EGFR(r!+,Y1148~u) -> EGFR(r!+,Y1148~p)  kp3

    #Dephosphorylayion
    EGFR(Y1068~p) + PTP() -> EGFR(Y1068~u) + PTP()  km3
    EGFR(Y1148~p) -> EGFR(Y1148~u)  km3

    # Shc transphosph
    EGFR(r!+,Y1148~p!1).Shc(PTB!1,Y317~u) ->  EGFR(r!+,Y1148~p!1).Shc(PTB!1,Y317~p)  kp14
    Shc(PTB!+,Y317~p)  ->  Shc(PTB!+,Y317~u)  km14

    # Y1068 activity
    EGFR(Y1068~p) + Grb2(SH2,SH3)   <-> EGFR(Y1068~p!1).Grb2(SH2!1,SH3)    kp9,km9
    EGFR(Y1068~p) + Grb2(SH2,SH3)   -> EGFR(Y1068~p!1).Grb2(SH2!1,SH3)    kp9,km9
    EGFR(Y1068~p!1).Grb2(SH2!1,SH3)  <-> EGFR(Y1068~p) + Grb2(SH2,SH3)
    EGFR(Y1068~p!1).Grb2(SH2!1,SH3)  -> EGFR(Y1068~p) + Grb2(SH2,SH3)

    EGFR(Y1068~p) + Grb2(SH2,SH3!+).EGFR()   <-> EGFR(Y1068~p!1).Grb2(SH2!1,SH3!+).EGFR() kp9,km9
    EGFR(Y1068~p) + Grb2(SH2,SH3)   <-> EGFR(Y1068~p!1).Grb2(SH2!1,SH3) kp9,km9
    EGFR(Y1068~p).Grb2(SH2,SH3!+)   <-> EGFR(Y1068~p!1).Grb2(SH2!1,SH3!+) kp9,km9

    EGFR(Y1068~p) + Grb2(SH2,SH3!+) <-> EGFR(Y1068~p!1).Grb2(SH2!1,SH3!+)  kp11,km11
    EGFR(Y1068~p!1).Grb2(SH2!1,SH3) + Sos(dom) <-> EGFR(Y1068~p!1).Grb2(SH2!1,SH3!2).Sos(dom!2)  kp10,km10

    # Y1148 activity
    EGFR(Y1148~p) + Shc(PTB,Y317~u)    <-> EGFR(Y1148~p!1).Shc(PTB!1,Y317~u)   kp13,km13
    EGFR(Y1148~p) + Shc(PTB,Y317~p)   <-> EGFR(Y1148~p!1).Shc(PTB!1,Y317~p)  kp15,km15
    EGFR(Y1148~p) + Shc(PTB,Y317~p!1).Grb2(SH2!1,SH3)   <-> \
          EGFR(Y1148~p!2).Shc(PTB!2,Y317~p!1).Grb2(SH2!1,SH3)  kp18,km18
    EGFR(Y1148~p) + Shc(PTB,Y317~p!1).Grb2(SH2!1,SH3!3).Sos(dom!3)   <-> \
          EGFR(Y1148~p!2).Shc(PTB!2,Y317~p!1).Grb2(SH2!1,SH3!3).Sos(dom!3)  kp20,km20

    EGFR(Y1148~p!1).Shc(PTB!1,Y317~p) + Grb2(SH2,SH3)   <-> \
          EGFR(Y1148~p!1).Shc(PTB!1,Y317~p!2).Grb2(SH2!2,SH3)  kp17,km17

    EGFR(Y1148~p!1).Shc(PTB!1,Y317~p) + Grb2(SH2,SH3!3).Sos(dom!3)   <-> \
          EGFR(Y1148~p!1).Shc(PTB!1,Y317~p!2).Grb2(SH2!2,SH3!3).Sos(dom!3)  kp24,km24

    Shc(PTB!+,Y317~p!2).Grb2(SH2!2,SH3) + Sos(dom)   <-> \
          Shc(PTB!+,Y317~p!2).Grb2(SH2!2,SH3!3).Sos(dom!3)  kp19,km19

    # Cytosolic 
    Shc(PTB,Y317~p) + Grb2(SH2,SH3)   <-> Shc(PTB,Y317~p!1).Grb2(SH2!1,SH3)    kp21,km21
    Shc(PTB,Y317~p) + Grb2(SH2,SH3!+) <-> Shc(PTB,Y317~p!1).Grb2(SH2!1,SH3!+)  kp23,km23
    Shc(PTB,Y317~p) -> Shc(PTB,Y317~u)  km16
    Grb2(SH2,SH3) + Sos(dom) <-> Grb2(SH2,SH3!1).Sos(dom!1)  kp12,km12
    Shc(PTB,Y317~p!2).Grb2(SH2!2,SH3) + Sos(dom)   <-> \
    Shc(PTB,Y317~p!2).Grb2(SH2!2,SH3!3).Sos(dom!3)  kp22,km22
end reaction rules

begin observables
    Molecules    Dimers1      EGFR(l, r, Y1068~u, Y1148~u~p)
    Molecules    Dimers       EGFR(l, r!+, Y1068~u)
    Molecules    Sos_act      Shc(PTB!+,Y317~p!2).Grb2(SH2!2,SH3!3).Sos(dom!3), EGFR(Y1068~p!1).Grb2(SH2!1,SH3!2).Sos(dom!2)
    Molecules    RP           EGFR(Y1068~p!?), EGFR(Y1148~p!?)


    Molecules    Shc_Grb      Shc(Y317~p!1).Grb2(SH2!1)
    Molecules    Shc_Grb_Sos  Shc(Y317~p!1).Grb2(SH2!1,SH3!2).Sos(dom!2)
    Molecules    R_Grb2       EGFR(Y1068~p!1).Grb2(SH2!1)
    Molecules    R_Shc        EGFR(Y1148~p!1).Shc(PTB!1,Y317~u)
    Molecules    R_ShcP       EGFR(Y1148~p!1).Shc(PTB!1,Y317~p!?)
    Molecules    ShcP         Shc(Y317~p!?)
    Molecules    R_G_S        EGFR(Y1068~p!1).Grb2(SH2!1,SH3!2).Sos(dom!2)
    # Strong differences are seen for R_G_S in comparison with path model
    Molecules    R_S_G_S      EGFR(Y1148~p!1).Shc(PTB!1,Y317~p!2).Grb2(SH2!2,SH3!3).Sos(dom!3)

    Molecules    Efgr_total   EGFR
    Molecules    Shc_total    Shc
    Molecules    Sos_total    Sos
    Molecules    Grb2_total   Grb2
end observables
end model

## actions ##
generate_network({overwrite=>1})
# Equilibration
setConcentration("EGF(r)",0)
simulate_ode({t_end=>100000,n_steps=>10,sparse=>1,steady_state=>1})
# Kinetics
setConcentration("EGF(r)","egf_tot")
writeSBML({})
simulate_ode({t_end=>120,n_steps=>120,atol=>1e-8,rtol=>1e-8,sparse=>1})

